PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = SA-Stroop
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine COMsettings
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    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        import serial

        # connect to serial COM port
        # True = yes for the experiment flow and the serial port communication
        # False = no for the experiment flow only
        # The COM port needs to be updated based on the specific device connection
        doYouWantCOM = False
        if doYouWantCOM:
            port = serial.Serial(port='COM7', baudrate=2000000)
            port.timeout = 1               # timeout 1 second (give 1 second to the board to initialize port)


        marker_stimulusOnset_goCongruent     = 1
        marker_stimulusOnset_goIncongruent   = 2
        marker_stimulusOnset_nogoCongruent   = 4
        marker_stimulusOnset_nogoIncongruent = 8
        marker_response_goCorrect          = 16
        marker_response_goIncorrect        = 32
        marker_response_nogoIncorrect      = 64 # false positive
  Routine start
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    ImageComponent image
      image = start slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instStroop
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    ImageComponent image_2
      image = stroop_instruction_1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_10
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instStroop2
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    ImageComponent image_3
      image = stroop_instruction_2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_11
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sequenceGenerationPract1
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    CodeComponent stimuli_3
      Code Type = Auto->JS
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      End Routine:
        """
        This script generates sequences of stroop stimuli
        """

        import numpy as np
        import pandas as pd

        trialAll_num = 20 # number of trials (must be even)
        trialCongruent_proportion = 1/2 # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion # num of match trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color=="yellow"] = "s"
        expectedResponse[color=="green"]  = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"


        # %% create dataset
        # build a dataframe from dictionary

        practice_stroop= pd.DataFrame({'trial': trial,
                                       'word': word,
                                       'color': color,
                                       'congruent': congruent,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan
                                       })
        practice_stroop
    TextComponent waitScreen_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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  Routine instNogo
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    ImageComponent image_4
      image = gng_instruction_1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_12
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instNogo2
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    ImageComponent image_5
      image = gng_instruction_2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_13
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine startpractice
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instNogo3
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    ImageComponent image_6
      image = stroop_instruction_1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_14
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sequenceGenerationPract2
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        """
        This script generates sequences of nogo stimuli
        """

        import numpy as np
        import pandas as pd
        import random
        from collections import Counter

        trialAll_num = 40  # number of trials
        trialCongruent_proportion = 1 / 2  # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion  # num of congruent trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create nogo trials
        # set blocks of nogo trials to contain specific range of number (varied numbers is randomly picked between a range to make it less predictable + faster for the code to run)
        # add one color into each block (no same color repeat twice) and that color will be shown in the border

        # define nogo parameters
        trialNogo_proportion = 1 / 4  # 25% nogo trials
        trialNogo_congruent_proportion = 1 / 2 # 50% of nogo trials are congruent
        trialNogo_num_expected = trialAll_num * trialNogo_proportion
        trialNogo_congruent_num_expected = trialNogo_num_expected * trialNogo_congruent_proportion
        trialNogo_incongruent_num_expected = trialNogo_num_expected - trialNogo_congruent_num_expected

        # define number of repeated colour in nogo block
        nogoBlock_smallest_size = 3 # minimum repetetion in a block
        nogoBlock_largest_size = 8 # maximum repetition in a block
        nogoBlock_total_num = 10 # number of block

        # create a list to store nogo block size
        nogoBlock_sizes_list = []
        nogo_remaining_trials = trialAll_num

        toggleSwitch1 = 1
        while toggleSwitch1 == 1:

            toggleSwitch4 = 1
            while toggleSwitch4 == 1: # generate a list to contain blocks of numbers for nogo trials
                while len(nogoBlock_sizes_list) < nogoBlock_total_num:
                    # if it's the last block, take all remaining trials but not exceeding the largest size
                    if len(nogoBlock_sizes_list) == nogoBlock_total_num - 1:
                        nogoBlock_sizes_list.append(min(nogo_remaining_trials, nogoBlock_largest_size))
                        nogo_remaining_trials = 0

                    else:
                        # if it's not the last block, calculate the limit block size from the number of remaining blocks (to make sure we have enough trials for all blocks)
                        # calculate the limit block size for the current nogo block to ensure that the the rest can still meet the criteria
                        remaining_blocks = nogoBlock_total_num - len(nogoBlock_sizes_list) - 1
                        limit_block_size = min(nogo_remaining_trials - remaining_blocks * nogoBlock_smallest_size, nogoBlock_largest_size)

                        nogoBlock_size = random.randint(nogoBlock_smallest_size, limit_block_size)  # choose a random block size within the specified range
                        nogoBlock_sizes_list.append(nogoBlock_size)  # append the block size to the list
                        nogo_remaining_trials -= nogoBlock_size

                # check if the sum of nogo block sizes in the list equal to the total number of trials
                if sum(nogoBlock_sizes_list) == trialAll_num:
                    toggleSwitch4 = 0
                else:
                    # reset if the condition is not met
                    nogoBlock_sizes_list.clear()
                    nogo_remaining_trials = trialAll_num

            # create a list to store nogo color
            nogo_color = []
            last_color = None

            # create a for loop to add nogo colour in each block
            for nogoBlock_size in nogoBlock_sizes_list:
                # create variable for available colors that are not the same as the last added color
                available_colors = [nogoColor_pick for nogoColor_pick in pool if nogoColor_pick != last_color]
                new_color = random.choice(available_colors)
                nogo_color.extend([new_color] * nogoBlock_size)
                last_color = new_color

            # convert nogo_color to array for further condition check
            nogo_color_array = np.array(nogo_color)
            # create nogo-related arrays to mark nogo trials (1 or 0)
            nogo = np.where(word == nogo_color, 1, 0)
            nogo_congruent = np.where(((nogo == 1) & (congruent == 1)), 1, 0)
            nogo_incongruent = np.where(((nogo == 1) & (congruent == 0)), 1, 0)

            # use logical indexing to get 'nogo_congruent_colors' and 'nogo_congruent_colors' for further condition check
            nogo_congruent_colors = nogo_color_array[(nogo_congruent == 1)]
            nogo_incongruent_colors = nogo_color_array[(nogo_incongruent == 1)]

            # create variables to count numbers of nogo trials, and number of nogo congruent trials
            trialNogo_count = np.sum(nogo == 1)
            trialNogo_congruent_count = np.sum(nogo_congruent == 1)

            # create proportion variables for further condition check
            wordNogo_congruent_proportion = np.empty(len(pool), dtype=float)
            wordNogo_incongruent_proportion = np.empty(len(pool), dtype=float)
            for poolIdx2 in np.arange(len(pool)):
                wordNogo_congruent_proportion[poolIdx2] = np.sum((congruent == 0) & (word == pool[poolIdx2]) & (nogo == 1)) / trialNogo_incongruent_num_expected
                wordNogo_incongruent_proportion[poolIdx2] = np.sum((congruent == 1) & (word == pool[poolIdx2]) & (nogo == 1)) / trialNogo_incongruent_num_expected

            # check if all conditions are satisfied
            if (all(color in nogo_color for color in pool) and  # all colours in pool are included in nogo_color array
                all(color in nogo_congruent_colors for color in pool) and # all colours in pool are included in nogo congruent array
                all(color in nogo_incongruent_colors for color in pool) and # all colours in pool are included in nogo incongruent array
                trialNogo_count == trialNogo_num_expected and  # total nogo trials as expected
                trialNogo_congruent_count == trialNogo_congruent_num_expected and  # congruent nogo trials as expected
                min(Counter(nogo_color).values()) >= 0.20 * trialAll_num and  # minimum 20% of each colour in nogo_color (the border)
                np.min(wordNogo_congruent_proportion) >= 0.125 and # minimun 12.5% of each colour is used as 'word' in nogo incongreunt
                np.min(wordNogo_incongruent_proportion) >= 0.125): # minimun 12.5% of each colour is used as 'word' in nogo incongreunt
                toggleSwitch1 = 0

        # create expectedResponse
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color == "yellow"] = "space"
        expectedResponse[color == "green"] = "space"
        expectedResponse[color == "blue"] = "space"
        expectedResponse[color == "red"] = "space"
        expectedResponse[nogo == 1] = "None"

        # create dataset
        practice_nogo = pd.DataFrame({'trial': trial,
                                        'word': word,
                                        'color': color,
                                        'congruent': congruent,
                                        'nogo_color': nogo_color,
                                        'nogo': nogo,
                                        'expectedResponse': expectedResponse,
                                        'observedResponse': np.nan,
                                        'Accuracy': np.nan,
                                        'Accuracy_nogo': np.nan,
                                        'AccuracyNogo': np.nan,
                                        'RT_allTrials': np.nan,
                                        'RT_correctTrials': np.nan,
                                        'trialDuration': np.nan})
        practice_nogo
    TextComponent waitScreen_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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  Routine instStroopNogo
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    ImageComponent image_7
      image = instruction_1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_15
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instStroopNogo2
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    ImageComponent image_8
      image = instruction_2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_16
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instStroopNogo3
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    ImageComponent image_9
      image = instruction_3.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_17
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sequenceGeneration
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        """
        This script generates sequences of stroop stimuli
        """

        import numpy as np
        import pandas as pd
        import random
        from collections import Counter

        trialAll_num = 40  # number of trials
        trialCongruent_proportion = 1 / 2  # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion  # num of congruent trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create nogo trials
        # set blocks of nogo trials to contain specific range of number (varied numbers is randomly picked between a range to make it less predictable + faster for the code to run)
        # add one color into each block (no same color repeat twice) and that color will be shown in the border

        # define nogo parameters
        trialNogo_proportion = 1 / 4  # 25% nogo trials
        trialNogo_congruent_proportion = 1 / 2 # 50% of nogo trials are congruent
        trialNogo_num_expected = trialAll_num * trialNogo_proportion
        trialNogo_congruent_num_expected = trialNogo_num_expected * trialNogo_congruent_proportion
        trialNogo_incongruent_num_expected = trialNogo_num_expected - trialNogo_congruent_num_expected

        # define number of repeated colour in nogo block
        nogoBlock_smallest_size = 3 # minimum repetetion in a block
        nogoBlock_largest_size = 8 # maximum repetition in a block
        nogoBlock_total_num = 10 # number of block

        # create a list to store nogo block size
        nogoBlock_sizes_list = []
        nogo_remaining_trials = trialAll_num

        toggleSwitch1 = 1
        while toggleSwitch1 == 1:

            toggleSwitch4 = 1
            while toggleSwitch4 == 1: # generate a list to contain blocks of numbers for nogo trials
                while len(nogoBlock_sizes_list) < nogoBlock_total_num:
                    # if it's the last block, take all remaining trials but not exceeding the largest size
                    if len(nogoBlock_sizes_list) == nogoBlock_total_num - 1:
                        nogoBlock_sizes_list.append(min(nogo_remaining_trials, nogoBlock_largest_size))
                        nogo_remaining_trials = 0

                    else:
                        # if it's not the last block, calculate the limit block size from the number of remaining blocks (to make sure we have enough trials for all blocks)
                        # calculate the limit block size for the current nogo block to ensure that the the rest can still meet the criteria
                        remaining_blocks = nogoBlock_total_num - len(nogoBlock_sizes_list) - 1
                        limit_block_size = min(nogo_remaining_trials - remaining_blocks * nogoBlock_smallest_size, nogoBlock_largest_size)

                        nogoBlock_size = random.randint(nogoBlock_smallest_size, limit_block_size)  # choose a random block size within the specified range
                        nogoBlock_sizes_list.append(nogoBlock_size)  # append the block size to the list
                        nogo_remaining_trials -= nogoBlock_size

                # check if the sum of nogo block sizes in the list equal to the total number of trials
                if sum(nogoBlock_sizes_list) == trialAll_num:
                    toggleSwitch4 = 0
                else:
                    # reset if the condition is not met
                    nogoBlock_sizes_list.clear()
                    nogo_remaining_trials = trialAll_num

            # create a list to store nogo color
            nogo_color = []
            last_color = None

            # create a for loop to add nogo colour in each block
            for nogoBlock_size in nogoBlock_sizes_list:
                # create variable for available colors that are not the same as the last added color
                available_colors = [nogoColor_pick for nogoColor_pick in pool if nogoColor_pick != last_color]
                new_color = random.choice(available_colors)
                nogo_color.extend([new_color] * nogoBlock_size)
                last_color = new_color

            # convert nogo_color to array for further condition check
            nogo_color_array = np.array(nogo_color)
            # create nogo-related arrays to mark nogo trials (1 or 0)
            nogo = np.where(word == nogo_color, 1, 0)
            nogo_congruent = np.where(((nogo == 1) & (congruent == 1)), 1, 0)
            nogo_incongruent = np.where(((nogo == 1) & (congruent == 0)), 1, 0)

            # use logical indexing to get 'nogo_congruent_colors' and 'nogo_congruent_colors' for further condition check
            nogo_congruent_colors = nogo_color_array[(nogo_congruent == 1)]
            nogo_incongruent_colors = nogo_color_array[(nogo_incongruent == 1)]

            # create variables to count numbers of nogo trials, and number of nogo congruent trials
            trialNogo_count = np.sum(nogo == 1)
            trialNogo_congruent_count = np.sum(nogo_congruent == 1)

            # create proportion variables for further condition check
            wordNogo_congruent_proportion = np.empty(len(pool), dtype=float)
            wordNogo_incongruent_proportion = np.empty(len(pool), dtype=float)
            for poolIdx2 in np.arange(len(pool)):
                wordNogo_congruent_proportion[poolIdx2] = np.sum((congruent == 0) & (word == pool[poolIdx2]) & (nogo == 1)) / trialNogo_incongruent_num_expected
                wordNogo_incongruent_proportion[poolIdx2] = np.sum((congruent == 1) & (word == pool[poolIdx2]) & (nogo == 1)) / trialNogo_incongruent_num_expected

            # check if all conditions are satisfied
            if (all(color in nogo_color for color in pool) and  # all colours in pool are included in nogo_color array
                all(color in nogo_congruent_colors for color in pool) and # all colours in pool are included in nogo congruent array
                all(color in nogo_incongruent_colors for color in pool) and # all colours in pool are included in nogo incongruent array
                trialNogo_count == trialNogo_num_expected and  # total nogo trials as expected
                trialNogo_congruent_count == trialNogo_congruent_num_expected and  # congruent nogo trials as expected
                min(Counter(nogo_color).values()) >= 0.20 * trialAll_num and  # minimum 20% of each colour in nogo_color (the border)
                np.min(wordNogo_congruent_proportion) >= 0.125 and # minimun 12.5% of each colour is used as 'word' in nogo congreunt
                np.min(wordNogo_incongruent_proportion) >= 0.125): # minimun 12.5% of each colour is used as 'word' in nogo incongreunt
                toggleSwitch1 = 0


        # create expectedResponse
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color == "yellow"] = "s"
        expectedResponse[color == "green"] = "c"
        expectedResponse[color == "blue"] = "l"
        expectedResponse[color == "red"] = "m"
        expectedResponse[nogo == 1] = "None"

        # create dataset
        sequenceDataset = pd.DataFrame({'trial': trial,
                                        'word': word,
                                        'color': color,
                                        'congruent': congruent,
                                        'nogo_color': nogo_color,
                                        'nogo': nogo,
                                        'expectedResponse': expectedResponse,
                                        'observedResponse': np.nan,
                                        'Accuracy': np.nan,
                                        'Accuracy_nogo': np.nan,
                                        'AccuracyNogo': np.nan,
                                        'RT_allTrials': np.nan,
                                        'RT_correctTrials': np.nan,
                                        'trialDuration': np.nan,
                                        'step': np.nan})
        sequenceDataset
    TextComponent waitScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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  Routine practiceTrial
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    CodeComponent addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.trial[practiceBlock.thisN])
        thisExp.addData('myPract.word', sequenceDataset.word[practiceBlock.thisN])
        thisExp.addData('myPract.color', sequenceDataset.color[practiceBlock.thisN])
        thisExp.addData('myPract.congruent', sequenceDataset.congruent[practiceBlock.thisN])
        thisExp.addData('myPract.nogo_color', sequenceDataset.nogo_color[practiceBlock.thisN])
        thisExp.addData('myPract.nogo',  sequenceDataset.nogo[practiceBlock.thisN])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.expectedResponse[practiceBlock.thisN])

        # set response time limit
        if sequenceDataset.nogo[practiceBlock.thisN] == 1:
            time_limit = 2  # 2 seconds for nogo trials
        else:
            time_limit = float('inf')  # Unlimited for go trials
      End Routine:
        import numpy as np

        # observed response
        if stroopResp.keys:
            sequenceDataset.observedResponse[practiceBlock.thisN] = stroopResp.keys
        else:
            sequenceDataset.observedResponse[practiceBlock.thisN] = 'None'
        thisExp.addData('myPract.observedResponse', sequenceDataset.observedResponse[practiceBlock.thisN])

        # Accuracy
        if sequenceDataset.nogo[practiceBlock.thisN] == 1:
            sequenceDataset.Accuracy[practiceBlock.thisN]             = int(sequenceDataset.observedResponse[practiceBlock.thisN] == "None")
        else:
            sequenceDataset.Accuracy[practiceBlock.thisN]             = int(sequenceDataset.expectedResponse[practiceBlock.thisN] == sequenceDataset.observedResponse[practiceBlock.thisN])
        thisExp.addData('myPract.Accuracy',         sequenceDataset.Accuracy[practiceBlock.thisN])

        # AccuracyNogo
        if sequenceDataset.nogo[practiceBlock.thisN] == 1:
            sequenceDataset.AccuracyNogo[practiceBlock.thisN] = int(sequenceDataset.observedResponse[practiceBlock.thisN] == "None")
        thisExp.addData('myPract.AccuracyNogo',         sequenceDataset.AccuracyNogo[practiceBlock.thisN])

        # RT all trials
        if sequenceDataset.nogo[practiceBlock.thisN] != 1:
            sequenceDataset.RT_allTrials[practiceBlock.thisN]         = stroopResp.rt
            thisExp.addData('myPract.RT_allTrials',     sequenceDataset.RT_allTrials[practiceBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[practiceBlock.thisN] == 1 and sequenceDataset.nogo[practiceBlock.thisN] != 1:
            sequenceDataset.RT_correctTrials[practiceBlock.thisN] = stroopResp.rt
            thisExp.addData('myPract.RT_correctTrials',     sequenceDataset.RT_correctTrials[practiceBlock.thisN])
    PolygonComponent polygon_3
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $sequenceDataset.nogo_color[practiceBlock.thisN]
      lineWidth = 5
      pos = (0, -0.03)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_limit
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    TextComponent stroopStim
      color [set every repeat] = $str(sequenceDataset.color[practiceBlock.thisN])
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_limit
      text [set every repeat] = $str(sequenceDataset.word[practiceBlock.thisN])
      units = deg
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    KeyboardComponent stroopResp
      allowedKeys = 's', 'c', 'm', 'l', None
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_limit
      store = first key
      storeCorrect = True
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    CodeComponent practEndRoutine
      Code Type = Auto->JS
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      Each Frame:
        # force end of routine when key is pressed, but only after send the response marker
        if stroopResp.keys:
            continueRoutine = False
  Routine practiceTrial_feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # text, color, and sound of feedback
        if stroopResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            if sequenceDataset.nogo[practiceBlock.thisN] == 1:
                fb_text = 'Fail to stop'
                fb_col = 'red'
                sound_volume = 1
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
                sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    PolygonComponent polygon_4
      durationEstim = 1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $sequenceDataset.nogo_color[practiceBlock.thisN]
      lineWidth = 5
      pos = (0, -0.03)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
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    TextComponent fb
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent sound_1
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fb_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)
        Practice_NogoTrials_num = np.sum(sequenceDataset.nogo)

        # number of trials with correct answer
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)
        Practice_correctNogoTrials_num = np.sum(sequenceDataset.AccuracyNogo)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num
        Practice_correctNogoTrials_pct= 100*Practice_correctNogoTrials_num/ Practice_NogoTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg =  "%i of %i correct responses \n%.2f%% correct overall \n%i of %i correct stops \n%.2f%% correct stops \nMdn RT = %.2f s " % (Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctNogoTrials_num, Practice_NogoTrials_num, Practice_correctNogoTrials_pct, Practice_correctTrials_MdnRT)

        else:
            msg =  "%i of %i correct responses \n%.2f%% correct overall \n%i of %i correct stops \n%.2f%% correct stops" % (Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctNogoTrials_num, Practice_NogoTrials_num, Practice_correctNogoTrials_pct)




        # color of feedback
        if Practice_correctTrials_pct>=70 and Practice_correctNogoTrials_pct >= 70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70 and Practice_correctNogoTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 0.09
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg
    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent moveOn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst_markers
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    ImageComponent image_10
      image = markers_instruction.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_18
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst_EEGrecording
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    ImageComponent image_11
      image = EEG_instruction.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_19
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine starttask
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sequenceGeneration_2
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    CodeComponent stimuli_2
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd
        import random
        from collections import Counter

        trialAll_num = 1600  # number of trials
        trialCongruent_proportion = 1 / 2  # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion  # num of congruent trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create nogo trials
        # set blocks of nogo trials to contain specific range of number (varied numbers is randomly picked between a range to make it less predictable + faster for the code to run)
        # add one color into each block (no same color repeat twice) and that color will be shown in the border

        # define nogo parameters
        trialNogo_proportion = 1 / 4  # 25% nogo trials
        trialNogo_congruent_proportion = 1 / 2 # 50% of nogo trials are congruent
        trialNogo_num_expected = trialAll_num * trialNogo_proportion
        trialNogo_congruent_num_expected = trialNogo_num_expected * trialNogo_congruent_proportion
        trialNogo_incongruent_num_expected = trialNogo_num_expected - trialNogo_congruent_num_expected

        # define number of repeated colour in nogo block
        nogoBlock_smallest_size = 15 # minimum repetetion in a block
        nogoBlock_largest_size = 35 # maximum repetition in a block
        nogoBlock_total_num = 64 # number of block

        # create a list to store nogo block size
        nogoBlock_sizes_list = []
        nogo_remaining_trials = trialAll_num

        toggleSwitch1 = 1
        while toggleSwitch1 == 1:

            toggleSwitch4 = 1
            while toggleSwitch4 == 1: # generate a list to contain blocks of numbers for nogo trials
                while len(nogoBlock_sizes_list) < nogoBlock_total_num:
                    # if it's the last block, take all remaining trials but not exceeding the largest size
                    if len(nogoBlock_sizes_list) == nogoBlock_total_num - 1:
                        nogoBlock_sizes_list.append(min(nogo_remaining_trials, nogoBlock_largest_size))
                        nogo_remaining_trials = 0

                    else:
                        # if it's not the last block, calculate the limit block size from the number of remaining blocks (to make sure we have enough trials for all blocks)
                        # calculate the limit block size for the current nogo block to ensure that the the rest can still meet the criteria
                        remaining_blocks = nogoBlock_total_num - len(nogoBlock_sizes_list) - 1
                        limit_block_size = min(nogo_remaining_trials - remaining_blocks * nogoBlock_smallest_size, nogoBlock_largest_size)

                        nogoBlock_size = random.randint(nogoBlock_smallest_size, limit_block_size)  # choose a random block size within the specified range
                        nogoBlock_sizes_list.append(nogoBlock_size)  # append the block size to the list
                        nogo_remaining_trials -= nogoBlock_size

                # check if the sum of nogo block sizes in the list equal to the total number of trials
                if sum(nogoBlock_sizes_list) == trialAll_num:
                    toggleSwitch4 = 0
                else:
                    # reset if the condition is not met
                    nogoBlock_sizes_list.clear()
                    nogo_remaining_trials = trialAll_num

            # create a list to store nogo color
            nogo_color = []
            last_color = None

            # create a for loop to add nogo colour in each block
            for nogoBlock_size in nogoBlock_sizes_list:
                # create variable for available colors that are not the same as the last added color
                available_colors = [nogoColor_pick for nogoColor_pick in pool if nogoColor_pick != last_color]
                new_color = random.choice(available_colors)
                nogo_color.extend([new_color] * nogoBlock_size)
                last_color = new_color

            # convert nogo_color to array for further condition check
            nogo_color_array = np.array(nogo_color)
            # create nogo-related arrays to mark nogo trials (1 or 0)
            nogo = np.where(word == nogo_color, 1, 0)
            nogo_congruent = np.where(((nogo == 1) & (congruent == 1)), 1, 0)
            nogo_incongruent = np.where(((nogo == 1) & (congruent == 0)), 1, 0)

            # use logical indexing to get 'nogo_congruent_colors' and 'nogo_congruent_colors' for further condition check
            nogo_congruent_colors = nogo_color_array[(nogo_congruent == 1)]
            nogo_incongruent_colors = nogo_color_array[(nogo_incongruent == 1)]

            # create variables to count numbers of nogo trials, and number of nogo congruent trials
            trialNogo_count = np.sum(nogo == 1)
            trialNogo_congruent_count = np.sum(nogo_congruent == 1)

            # create proportion variables for further condition check
            wordNogo_congruent_proportion = np.empty(len(pool), dtype=float)
            wordNogo_incongruent_proportion = np.empty(len(pool), dtype=float)
            for poolIdx2 in np.arange(len(pool)):
                wordNogo_congruent_proportion[poolIdx2] = np.sum((congruent == 0) & (word == pool[poolIdx2]) & (nogo == 1)) / trialNogo_incongruent_num_expected
                wordNogo_incongruent_proportion[poolIdx2] = np.sum((congruent == 1) & (word == pool[poolIdx2]) & (nogo == 1)) / trialNogo_incongruent_num_expected

            # check if all conditions are satisfied
            if (all(color in nogo_color for color in pool) and  # all colours in pool are included in nogo_color array
                all(color in nogo_congruent_colors for color in pool) and # all colours in pool are included in nogo congruent array
                all(color in nogo_incongruent_colors for color in pool) and # all colours in pool are included in nogo incongruent array
                trialNogo_count == trialNogo_num_expected and  # total nogo trials as expected
                trialNogo_congruent_count == trialNogo_congruent_num_expected and  # congruent nogo trials as expected
                min(Counter(nogo_color).values()) >= 0.20 * trialAll_num and  # minimum 20% of each colour in nogo_color (the border)
                np.min(wordNogo_congruent_proportion) >= 0.20 and # minimun 20% of each colour is used as 'word' in nogo congreunt
                np.min(wordNogo_incongruent_proportion) >= 0.20): # minimun 20% of each colour is used as 'word' in nogo incongreunt
                toggleSwitch1 = 0

        # %% create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color == "yellow"] = "s"
        expectedResponse[color == "green"] = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"
        expectedResponse[nogo == 1] = "None"

        # %% create dataset
        # build a dataframe from dictionary
        sequenceDataset = pd.DataFrame({'trial': trial,
                                        'word': word,
                                        'color': color,
                                        'congruent': congruent,
                                        'nogo_color': nogo_color,
                                        'nogo': nogo,
                                        'expectedResponse': expectedResponse,
                                        'observedResponse': np.nan,
                                        'Accuracy': np.nan,
                                        'AccuracyNogo': np.nan,
                                        'RT_allTrials': np.nan,
                                        'RT_correctTrials': np.nan,
                                        'trialDuration': np.nan,
                                        'step': np.nan})
        sequenceDataset
    TextComponent waitScreen_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.word',             sequenceDataset.word[experimentalBlock.thisN])
        thisExp.addData('myExp.color',            sequenceDataset.color[experimentalBlock.thisN])
        thisExp.addData('myExp.congruent',        sequenceDataset.congruent[experimentalBlock.thisN])
        thisExp.addData('myExp.nogo_color',       sequenceDataset.nogo_color[experimentalBlock.thisN])
        thisExp.addData('myExp.nogo',             sequenceDataset.nogo[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])

        # adaptive duration
        if sequenceDataset.trial[experimentalBlock.thisN] == 1: # first trial
            if sequenceDataset.nogo[experimentalBlock.thisN] == 0: # if it's go trial
                sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_3qrtRT # use the RT + 500ms
            else:  # if it's nogo trial
                sequenceDataset.trialDuration[experimentalBlock.thisN] = (0.5 + Practice_correctTrials_3qrtRT) + 1 # use the RT + 500ms + 1000ms

        else: # not the first trial
            last_go_duration = 0
            adaptation_sum = 0
            found_last_go = False

            # set a loop backwards to find the last go trial
            for lastgoIdx in range(experimentalBlock.thisN - 1, -1, -1):
                if sequenceDataset.nogo[lastgoIdx] == 0:  # if there was a last go
                    last_go_duration = sequenceDataset.trialDuration[lastgoIdx]
                    found_last_go = True

                    # add the adaptation from the last go trial's accuracy
                    adaptation_sum += sequenceDataset.step[lastgoIdx]
                    break

                # sum adaptations from last go onwards until the previous one
                adaptation_sum += sequenceDataset.step[lastgoIdx]

            if sequenceDataset.nogo[experimentalBlock.thisN] == 1: # if current trial is nogo
                if found_last_go: # if a go trial was found, calculate duration based on last go duration + adaptation(s), then + 1
                    sequenceDataset.trialDuration[experimentalBlock.thisN] = (last_go_duration + adaptation_sum) + 1
                else:
                    # if the last go trial is not found (it has been nogo from the first trial until the current one), use the normal adaptation rule (previous trial duration + step based on its accuracy)
                    sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.trialDuration[experimentalBlock.thisN-1] + sequenceDataset.step[experimentalBlock.thisN-1]
            else: # if current trial is go
                if found_last_go:
                    sequenceDataset.trialDuration[experimentalBlock.thisN] = last_go_duration + adaptation_sum
                else: # previous trial was go, use the normal adaptation rule (previous trial duration + step based on its accuracy) 1 1
                    sequenceDataset.trialDuration[experimentalBlock.thisN] = (sequenceDataset.trialDuration[experimentalBlock.thisN-1] + sequenceDataset.step[experimentalBlock.thisN-1]) - 1
      End Routine:
        # observed response
        if stroopResp_2.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = stroopResp_2.keys
        else:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = 'None'
        thisExp.addData('myExp.observedResponse', sequenceDataset.observedResponse[experimentalBlock.thisN])

        # trialDuration
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])

        # Accuracy
        if sequenceDataset.nogo[experimentalBlock.thisN] == 1:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == "None")
        else:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.expectedResponse[experimentalBlock.thisN] == sequenceDataset.observedResponse[experimentalBlock.thisN])
        thisExp.addData('myExp.Accuracy',         sequenceDataset.Accuracy[experimentalBlock.thisN])

        # AccuracyNogo
        if sequenceDataset.nogo[experimentalBlock.thisN] == 1:
            sequenceDataset.AccuracyNogo[experimentalBlock.thisN] = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == "None")
        thisExp.addData('myExp.AccuracyNogo',         sequenceDataset.AccuracyNogo[experimentalBlock.thisN])

        # RT all trials
        if stroopResp_2.keys:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = stroopResp_2.rt
            thisExp.addData('myExp.RT_allTrials',     sequenceDataset.RT_allTrials[experimentalBlock.thisN])

        # RT correct trials
        if stroopResp_2.keys and sequenceDataset.Accuracy[experimentalBlock.thisN] == 1 and sequenceDataset.nogo[experimentalBlock.thisN] != 1:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN] = stroopResp_2.rt
            thisExp.addData('myExp.RT_correctTrials',     sequenceDataset.RT_correctTrials[experimentalBlock.thisN])

        # adaptation
        if sequenceDataset.congruent[experimentalBlock.thisN]== 0 and sequenceDataset.nogo[experimentalBlock.thisN]== 0:
           if sequenceDataset.Accuracy[experimentalBlock.thisN] == 1:
               sequenceDataset.step[experimentalBlock.thisN]    = -0.05    # if correct response, decrease duration
           else:
                sequenceDataset.step[experimentalBlock.thisN]    = +0.05    # otherwise (incorrect or no response), increase duration
        else:
            sequenceDataset.step[experimentalBlock.thisN]    = 0.0
        thisExp.addData('myExp.step',         sequenceDataset.step[experimentalBlock.thisN])
    ProgressComponent progressBar_pract1
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      units = height
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    PolygonComponent left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.5, 1)
      shape = rectangle
      size = (0.01, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
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    PolygonComponent central
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, 1)
      shape = rectangle
      size = (0.01, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
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    PolygonComponent right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.5, 1)
      shape = rectangle
      size = (0.01, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $sequenceDataset.nogo_color[experimentalBlock.thisN]
      lineWidth = 5
      pos = (0, -0.03)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
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    TextComponent stroopStim_2
      color [set every repeat] = $sequenceDataset.color[experimentalBlock.thisN]
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      text [set every repeat] = $sequenceDataset.word[experimentalBlock.thisN]
      units = deg
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    KeyboardComponent stroopResp_2
      allowedKeys = 's','c','m','l', None
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      store = first key
      storeCorrect = True
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    CodeComponent expTrial_serialCOM_2
      Code Type = Auto->JS
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      Begin Routine:
        # initialize variables controlling whether the stimulus and response triggers have been sent for this trial
        stimulusPulse_sent = False
        responsePulse_sent = False
      Each Frame:
        # communicate with the serial port
        if doYouWantCOM:

            # send stimulus pulse and record at what time it is sent
            if stroopStim_2.status == STARTED and not stimulusPulse_sent:
                # decide which marker to send
                if sequenceDataset.congruent[experimentalBlock.thisN]:
                    if sequenceDataset.nogo[experimentalBlock.thisN]:
                        stimmarker2send = marker_stimulusOnset_nogoCongruent
                    else:
                        stimmarker2send = marker_stimulusOnset_goCongruent
                else:
                    if sequenceDataset.nogo[experimentalBlock.thisN]:
                        stimmarker2send = marker_stimulusOnset_nogoIncongruent
                    else:
                        stimmarker2send = marker_stimulusOnset_goIncongruent
                # send marker
                win.callOnFlip(port.write, [stimmarker2send])
                stimulusPulse_startTime = core.monotonicClock.getTime()
                stimulusPulse_sent = True
                stimulusPulse_terminated = False
            # forcing termination of a stimulus pulse if it lasts at least 20 ms
            if stimulusPulse_sent and not stimulusPulse_terminated:
                if core.monotonicClock.getTime() - stimulusPulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    stimulusPulse_terminated = True


            # send a response pulse and record at what time it is sent
            if len(stroopResp_2.keys)>0 and not responsePulse_sent:
                # decide which marker to send
                if sequenceDataset.nogo[experimentalBlock.thisN]:
                    respmarker2send = marker_response_nogoIncorrect
                else:
                    if stroopResp_2.corr:
                        respmarker2send = marker_response_goCorrect
                    else:
                        respmarker2send = marker_response_goIncorrect
                # send marker
                win.callOnFlip(port.write, [respmarker2send])
                responsePulse_startTime = core.monotonicClock.getTime()
                responsePulse_sent = True
                responsePulse_terminated = False
            # forcing termination of a response pulse if it lasts at least 20 ms
            if responsePulse_sent and not responsePulse_terminated:
                if core.monotonicClock.getTime() - responsePulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    responsePulse_terminated = True
      End Routine:
        # add timing of triggers
        if stimulusPulse_sent:
            thisExp.addData('myExp.stimulusPulse_startTime', stimulusPulse_startTime)
            thisExp.addData('myExp.stimulusPulse_marker', stimmarker2send)
        if responsePulse_sent:
            thisExp.addData('myExp.responsePulse_startTime', responsePulse_startTime)
            thisExp.addData('myExp.responsePulse_marker', respmarker2send)
    CodeComponent expAfterKeyPress
      Code Type = Auto->JS
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      Each Frame:
        # force stimuli to disappear after keypress
        if stroopResp_2.keys:
            stroopStim_2.color = [0, 0, 0]
            #polygon.opacity = 0
    CodeComponent expTone
      Code Type = Auto->JS
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      Before Experiment:
        # sound parameters
        errorBeep = sound.Sound(600, secs = 0.050, stereo=True, hamming=False, volume = 1)
      Begin Routine:
        # for each trial reset error beep parameters
        toggleBeep = False
        tonePlayed = False
      Each Frame:
        # determine if to play the error beep (within trial duration)
        if len(stroopResp_2.keys)>0 and stroopResp_2.corr!=1:
            toggleBeep = True # incorrect response key within the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
      End Routine:
        # determine if to play the error beep (at end of trial duration)
        if stroopResp_2.keys==None and stroopResp_2.corr!=1:
            toggleBeep = True # no response (where one, correct, was expected) by the end of the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
  Routine End
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    ImageComponent image_12
      image = end slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent instText_3
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine practiceStroop
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    CodeComponent addData_3
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myStroopPract.trial', practice_stroop.trial[practiceStroopBlock.thisN])
        thisExp.addData('myStroopPract.word', practice_stroop.word[practiceStroopBlock.thisN])
        thisExp.addData('myStroopPract.color', practice_stroop.color[practiceStroopBlock.thisN])
        thisExp.addData('myStroopPract.congruent', practice_stroop.congruent[practiceStroopBlock.thisN])
        thisExp.addData('myStroopPract.expectedResponse', practice_stroop.expectedResponse[practiceStroopBlock.thisN])
      End Routine:
        # observed response
        if stroopResp_3.keys:
            practice_stroop.observedResponse[practiceStroopBlock.thisN] = stroopResp_3.keys
        thisExp.addData('myStroopPract.observedResponse',   practice_stroop.observedResponse[practiceStroopBlock.thisN])

        # Accuracy
        practice_stroop.Accuracy[practiceStroopBlock.thisN]             = int(practice_stroop.observedResponse[practiceStroopBlock.thisN] == practice_stroop.expectedResponse[practiceStroopBlock.thisN])
        thisExp.addData('myStroopPract.Accuracy',         practice_stroop.Accuracy[practiceStroopBlock.thisN])

        # RT all trials
        practice_stroop.RT_allTrials[practiceStroopBlock.thisN]         = stroopResp_3.rt
        thisExp.addData('myStroopPract.RT_allTrials',     practice_stroop.RT_allTrials[practiceStroopBlock.thisN])

        # RT correct trials
        if practice_stroop.Accuracy[practiceStroopBlock.thisN] == 1:
            practice_stroop.RT_correctTrials[practiceStroopBlock.thisN] = stroopResp_3.rt
            thisExp.addData('myStroopPract.RT_correctTrials',     practice_stroop.RT_correctTrials[practiceStroopBlock.thisN])
    TextComponent stroopStim_3
      color [set every repeat] = $str(practice_stroop.color[practiceStroopBlock.thisN])
      letterHeight = 5
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(practice_stroop.word[practiceStroopBlock.thisN])
      units = deg
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    KeyboardComponent stroopResp_3
      allowedKeys = 's', 'c', 'm', 'l'
      correctAns = $practice_stroop.expectedResponse[practiceStroopBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceStroop_feedback
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    CodeComponent fb_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # text, color, and sound of feedback
        if stroopResp_3.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fb_3
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent sound_3
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceStroopBlock_feedback
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    CodeComponent fb_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(practice_stroop.Accuracy)

        # number of trials with correct answer, among the trialRange specified below to discard the first 2 trials
        Practice_correctTrials_num = np.sum(practice_stroop.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(practice_stroop.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(practice_stroop.RT_correctTrials)

        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceStroopRepetition.finished = True
    TextComponent fb_4
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent instText_8
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent moveOn_08
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practiceNogo
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myNogoPract.trial', practice_nogo.trial[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.word', practice_nogo.word[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.color', practice_nogo.color[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.congruent', practice_nogo.congruent[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.nogo_color', practice_nogo.nogo_color[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.nogo',  practice_nogo.nogo[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.expectedResponse', practice_nogo.expectedResponse[practiceNogoBlock.thisN])

        # set response time limit
        time_limit = 2
      End Routine:
        import numpy as np

        # observed response
        if key_resp_4.keys:
            practice_nogo.observedResponse[practiceNogoBlock.thisN] = key_resp_4.keys
        else:
            practice_nogo.observedResponse[practiceNogoBlock.thisN] = 'None'
        thisExp.addData('myNogoPract.observedResponse', practice_nogo.observedResponse[practiceNogoBlock.thisN])

        # Accuracy
        if practice_nogo.nogo[practiceNogoBlock.thisN] == 1:
            practice_nogo.Accuracy[practiceNogoBlock.thisN]             = int(practice_nogo.observedResponse[practiceNogoBlock.thisN] == "None")
        else:
            practice_nogo.Accuracy[practiceNogoBlock.thisN]             = int(practice_nogo.expectedResponse[practiceNogoBlock.thisN] == practice_nogo.observedResponse[practiceNogoBlock.thisN])
        thisExp.addData('myNogoPract.Accuracy',         practice_nogo.Accuracy[practiceNogoBlock.thisN])

        # AccuracyNogo
        if practice_nogo.nogo[practiceNogoBlock.thisN] == 1:
            practice_nogo.AccuracyNogo[practiceNogoBlock.thisN] = int(practice_nogo.observedResponse[practiceNogoBlock.thisN] == "None")
        thisExp.addData('myNogoPract.AccuracyNogo',         practice_nogo.AccuracyNogo[practiceNogoBlock.thisN])

        # RT all trials
        if key_resp_4.keys and practice_nogo.nogo[practiceNogoBlock.thisN] != 1:
            practice_nogo.RT_allTrials[practiceNogoBlock.thisN]         = key_resp_4.rt
            thisExp.addData('myNogoPract.RT_allTrials',     practice_nogo.RT_allTrials[practiceNogoBlock.thisN])

        # RT correct trials
        if key_resp_4.keys and practice_nogo.Accuracy[practiceNogoBlock.thisN] == 1 and practice_nogo.nogo[practiceNogoBlock.thisN] != 1:
            practice_nogo.RT_correctTrials[practiceNogoBlock.thisN] = key_resp_4.rt
            thisExp.addData('myNogoPract.RT_correctTrials',     practice_nogo.RT_correctTrials[practiceNogoBlock.thisN])
    PolygonComponent polygon5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $practice_nogo.nogo_color[practiceNogoBlock.thisN]
      lineWidth = 5
      pos = (0, -0.03)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_limit
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    TextComponent text_4
      color [set every repeat] = $str(practice_nogo.color[practiceNogoBlock.thisN])
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_limit
      text [set every repeat] = $str(practice_nogo.word[practiceNogoBlock.thisN])
      units = deg
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    KeyboardComponent key_resp_4
      allowedKeys = 'space', None
      correctAns = $practice_nogo.expectedResponse[practiceNogoBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_limit
      store = first key
      storeCorrect = True
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  Routine practiceNogo_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # text, color, and sound of feedback
        if key_resp_4.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            if practice_nogo.observedResponse[practiceNogoBlock.thisN] == 'None' and practice_nogo.nogo[practiceNogoBlock.thisN] == 0:
                fb_text = 'Fail to respond'
                fb_col = 'red'
                sound_volume = 1
            else:
                fb_text = 'Fail to stop'
                fb_col = 'red'
                sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    PolygonComponent polygon_6
      durationEstim = 1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $practice_nogo.nogo_color[practiceNogoBlock.thisN]
      lineWidth = 5
      pos = (0, -0.03)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
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    TextComponent fb_5
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent sound_4
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceNogoBlock_feedback
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(practice_nogo.Accuracy)
        Practice_NogoTrials_num = np.sum(practice_nogo.nogo)

        # number of trials with correct answer
        Practice_correctTrials_num = np.sum(practice_nogo.Accuracy)
        Practice_correctNogoTrials_num = np.sum(practice_nogo.AccuracyNogo)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num
        Practice_correctNogoTrials_pct= 100*Practice_correctNogoTrials_num/ Practice_NogoTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(practice_nogo.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(practice_nogo.RT_correctTrials)

        # message for feedback
        if Practice_correctTrials_num> 0:
            msg =  "%i of %i correct responses \n%.2f%% correct overall \n%i of %i correct stops \n%.2f%% correct stops \nMdn RT = %.2f s" % (Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctNogoTrials_num, Practice_NogoTrials_num, Practice_correctNogoTrials_pct, Practice_correctTrials_MdnRT)

        else:
            msg =  "%i of %i correct responses \n%.2f%% correct overall \n%i of %i correct stops \n%.2f%% correct stops" % (Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctNogoTrials_num, Practice_NogoTrials_num, Practice_correctNogoTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70 and Practice_correctNogoTrials_pct >= 70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70 and Practice_correctNogoTrials_pct >= 70:
            practiceNogoRepetition.finished = True
    TextComponent fb_6
      color [set every repeat] = $fb_col
      letterHeight = 0.09
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg
    TextComponent instText_9
      letterHeight = 0.1
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent moveOn_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine COMsettings
  Routine start
  LoopInitiator practiceStroopRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine instStroop
    Routine instStroop2
    Routine startpractice
    Routine sequenceGenerationPract1
    LoopInitiator practiceStroopBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(practice_stroop)
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      Routine practiceStroop
      Routine practiceStroop_feedback
    LoopTerminator practiceStroopBlock
    Routine practiceStroopBlock_feedback
  LoopTerminator practiceStroopRepetition
  LoopInitiator practiceNogoRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine instNogo
    Routine instNogo2
    Routine startpractice
    Routine sequenceGenerationPract2
    LoopInitiator practiceNogoBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(practice_nogo)
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      Routine practiceNogo
      Routine practiceNogo_feedback
    LoopTerminator practiceNogoBlock
    Routine practiceNogoBlock_feedback
  LoopTerminator practiceNogoRepetition
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine instStroopNogo
    Routine instStroopNogo2
    Routine instStroopNogo3
    Routine startpractice
    Routine sequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instStroopNogo
  Routine instStroopNogo2
  Routine instStroopNogo3
  Routine inst_markers
  Routine inst_EEGrecording
  Routine starttask
  Routine sequenceGeneration_2
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
  LoopTerminator experimentalBlock
  Routine End
